/*
CK Overstreet and JD Klein
Last Updated 12/20/2012
Major characteristics of cell bodies and axons reconstructed by hand from:
H.D. Schwark, “The distribution of intrinsic cortical axons in area 3b of cat primary somatosensory cortex”, Experimental Brain Research, vol. 78, no. 3, pp. 501-513, Aug. 1989. 
*/

load_file("nrngui.hoc")

NAPICAL=69
NBOUTON=34

create soma, ap[NAPICAL], bt[NBOUTON]

access soma

connect ap[0](0), soma(0)
connect ap[1](0), ap[0](1)
connect ap[2](0), ap[1](1)
connect ap[3](0), ap[1](1)
connect ap[4](0), ap[1](1)
connect ap[5](0), ap[4](1)
connect ap[6](0), ap[5](1)
connect ap[7](0), ap[6](1)
connect ap[8](0), ap[0](1)
connect ap[9](0), ap[8](1)
connect ap[10](0), ap[8](1)
connect ap[11](0), ap[10](1)
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//connect bt[20](0), ap[42](1)
connect bt[20](0), ap[68](1)
connect bt[21](0), ap[44](1)
connect bt[22](0), ap[45](1)
connect bt[23](0), ap[47](1)
connect bt[24](0), ap[48](1)
connect bt[25](0), ap[50](1)
connect bt[26](0), ap[51](1)
connect bt[27](0), ap[53](1)
connect bt[28](0), ap[55](1)
connect bt[29](0), ap[58](1)
connect bt[30](0), ap[59](1)
connect bt[31](0), ap[61](1)
connect bt[32](0), ap[63](1)
connect bt[33](0), ap[64](1)


forall pt3dclear()

soma {
	pt3dadd(0, 0, 0, 10)
	pt3dadd(0, 10, 0, 10)
	insert axnode
	insert extracellular
	insert xtra
	xraxial=1e+09 
	xg=1e+09 
	xc=0 
	e_extracellular=0
}

for i = 0, NAPICAL-1 ap[i] { 
	insert axnode
	insert extracellular 
	insert xtra
	xraxial=1e+09 
	xg=1e+09 
	xc=0 
	e_extracellular=0
} 

for i = 0, NBOUTON-1 bt[i] { 
	insert axnode 
	insert extracellular 
	insert xtra
	xraxial=1e+09 
	xg=1e+09 
	xc=0 
	e_extracellular=0
}

ap[0] {
	pt3dadd(0, 10, 0, 2)
	pt3dadd(0, -100, 0, 2)
}
ap[1] {
	pt3dadd(0, -100, 0, 1)
	pt3dadd(225, -50, 0, 1)
}
ap[2] {
	pt3dadd(225, -50, 0, .25)
	pt3dadd(300, -50, 0, .25)
}
ap[3] {
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}


XORIGIN = 0
YORIGIN = 0
ZORIGIN = 0

access soma
pt3dchange(0, x3d(0)+XORIGIN, y3d(0)+YORIGIN, z3d(0)+ZORIGIN, diam3d(0))
pt3dchange(1, x3d(1)+XORIGIN, y3d(1)+YORIGIN, z3d(1)+ZORIGIN, diam3d(1))
nseg=21

for(i=0; i<=NAPICAL-1; i=i+1){
	access ap[i]
	pt3dchange(0, x3d(0)+XORIGIN, y3d(0)+YORIGIN, z3d(0)+ZORIGIN, diam3d(0))
	pt3dchange(1, x3d(1)+XORIGIN, y3d(1)+YORIGIN, z3d(1)+ZORIGIN, diam3d(1))
	nseg=101
}

for(i=0; i<=NBOUTON-1; i=i+1){
	access bt[i]
	pt3dchange(0, x3d(0)+XORIGIN, y3d(0)+YORIGIN, z3d(0)+ZORIGIN, diam3d(0))
	pt3dchange(1, x3d(1)+XORIGIN, y3d(1)+YORIGIN, z3d(1)+ZORIGIN, diam3d(1))
	nseg=5
}

forall Ra=70
access ap[0]